---
API: 2.1
OpenSesame: 3.2.6
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/dvm/Documents/Programming 2019/assignments/assignment7"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 12
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 SOA 100
	setcycle 0 angry_face_side left
	setcycle 0 arrow_direction left
	setcycle 0 correct_response z
	setcycle 0 cue_validity valid
	setcycle 1 SOA 300
	setcycle 1 angry_face_side left
	setcycle 1 arrow_direction left
	setcycle 1 correct_response z
	setcycle 1 cue_validity valid
	setcycle 2 SOA 500
	setcycle 2 angry_face_side left
	setcycle 2 arrow_direction left
	setcycle 2 correct_response z
	setcycle 2 cue_validity valid
	setcycle 3 SOA 100
	setcycle 3 angry_face_side right
	setcycle 3 arrow_direction left
	setcycle 3 correct_response z
	setcycle 3 cue_validity invalid
	setcycle 4 SOA 300
	setcycle 4 angry_face_side right
	setcycle 4 arrow_direction left
	setcycle 4 correct_response z
	setcycle 4 cue_validity invalid
	setcycle 5 SOA 500
	setcycle 5 angry_face_side right
	setcycle 5 arrow_direction left
	setcycle 5 correct_response z
	setcycle 5 cue_validity invalid
	setcycle 6 SOA 100
	setcycle 6 angry_face_side left
	setcycle 6 arrow_direction right
	setcycle 6 correct_response slash
	setcycle 6 cue_validity invalid
	setcycle 7 SOA 300
	setcycle 7 angry_face_side left
	setcycle 7 arrow_direction right
	setcycle 7 correct_response slash
	setcycle 7 cue_validity invalid
	setcycle 8 SOA 500
	setcycle 8 angry_face_side left
	setcycle 8 arrow_direction right
	setcycle 8 correct_response slash
	setcycle 8 cue_validity invalid
	setcycle 9 SOA 100
	setcycle 9 angry_face_side right
	setcycle 9 arrow_direction right
	setcycle 9 correct_response slash
	setcycle 9 cue_validity valid
	setcycle 10 SOA 300
	setcycle 10 angry_face_side right
	setcycle 10 arrow_direction right
	setcycle 10 correct_response slash
	setcycle 10 cue_validity valid
	setcycle 11 SOA 500
	setcycle 11 angry_face_side right
	setcycle 11 arrow_direction right
	setcycle 11 correct_response slash
	setcycle 11 cue_validity valid
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run block_loop always
	run feedback always

define inline_script display_presentation
	set description "Executes Python code"
	___run__
	# trial order
	fix_cnvs.show()
	clock.sleep(1000)
	cue_cnvs.show()
	clock.sleep(SOA)
	resp_cnvs.show()
	
	# wait for response (Bonus question)
	resp_keyboard.flush()
	key, end_time = resp_keyboard.get_key()
	var.response = key
	if var.response == var.correct_response:
		var.correct = 1
	else:
		var.correct = 0
	var.total_correct += var.correct
	var.acc = float(var.total_correct)/(var.live_row +1) * 100
	__end__
	___prepare__
	# import relevantt modules
	import random
	
	# create empty canvasses to display stimuli
	fix_cnvs = canvas()
	cue_cnvs = canvas()
	resp_cnvs = canvas()
	
	# initiate keyboard (bonus question)
	resp_keyboard = Keyboard(keylist=['z', '/'], timeout=None)
	
	# get relevant variables for upcoming trial
	SOA = var.SOA
	angry_face_side = var.angry_face_side
	arrow_direction = var.arrow_direction
	cue_validity = var.cue_validity
	
	# create lists of neutral and angry faces
	neutral_faces = ['neutral.png','neutral2.png','neutral3.png']
	angry_faces = ['angry.png','angry2.png','angry3.png']
	
	# select a neutral and an angry face
	neutral_face_image = random.choice(neutral_faces)
	angry_face_image = random.choice(angry_faces)
	
	# set position of neutral and angry face
	screen_width = cue_cnvs.width
	if angry_face_side == 'left':
		angry_pos_x = -1/4.0*screen_width
		neutral_pos_x = 1/4.0*screen_width
	else:
		angry_pos_x = 1/4.0*screen_width
		neutral_pos_x = -1/4.0*screen_width
	
	# set start and endpoint in x coordinates of arrow
	if arrow_direction == 'left':
		start_x, end_x = 20,-20
	else:
		start_x, end_x = -20,20
		
	# draw stimuli on respective canvasses
	fix_cnvs.fixdot()
	cue_cnvs.image(var.get_file(neutral_face_image), x = neutral_pos_x, scale = 1.5)
	cue_cnvs.image(var.get_file(angry_face_image), x = angry_pos_x, scale = 1.5)
	
	# copy cue canvas to response canvas
	resp_cnvs.copy(cue_cnvs)
	cue_cnvs.fixdot()
	resp_cnvs.arrow(sx = start_x, sy = 0, ex = end_x, ey = 0, body_length=0.8, body_width=0.5, head_width=10)
	__end__

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source table
	set skip 0
	set repeat 16
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad sketchpad
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run display_presentation always
	run logger always

